PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = MSIT_v2021-1-4_from-scratch
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Routines
  Routine instr_prac
    TextComponent instr_text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        We

        need

        Liz's

        modified

        instructions
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_task
    TextComponent task_instruct
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        now
        for
        actual
        task
        instructions
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine thx
    TextComponent thanks
      letterHeight = 0.1
      startVal [time (s)] = 1
      text = thanks for playing!
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  Routine practice
    TextComponent fix
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = +
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    GratingComponent grating
      pos = (-0.7,-0.3)
      sf = 3
      size = 0.2
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      tex = sin
      units = height
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    TextComponent triplets
      letterHeight = 0.5
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      text = 100
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    KeyboardComponent key_resp
      allowedKeys = 'left','down','right'
      forceEndRoutine = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      store = first key
      storeCorrect = True
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  Routine task
    TextComponent fix_2
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = +
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    GratingComponent grating_2
      pos = (-0.7,-0.3)
      sf = 3
      size = 0.2
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      tex = sin
      units = height
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    TextComponent triplets_2
      letterHeight = 0.5
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      text = 100
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    KeyboardComponent key_resp_4
      allowedKeys = 'left','down','right'
      forceEndRoutine = False
      startVal [time (s)] = 1
      stopVal [duration (s)] = 3
      store = first key
      storeCorrect = True
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Flow
  Routine instr_prac
  LoopInitiator trials_prac loopType="TrialHandler"
    loopType = random
    nReps = 20
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    Routine practice
  LoopTerminator trials_prac
  Routine instr_task
  LoopInitiator trials_task loopType="TrialHandler"
    loopType = random
    nReps = 200
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    Routine task
  LoopTerminator trials_task
  Routine thx
